PsychoPy2experiment version="2026.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = animal_words
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine start
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    PolygonComponent star
      fillColor = $(1.0000, 0.9216, 0.8667)
      lineColor = $(1.0000, 0.9216, 0.8667)
      shape = star7
      size = (0.035, 0.035)
      startVal [time (s)] = 0.0
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    MouseComponent start_mouse
      clickable = star
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable [set every repeat] = name,
      startVal [time (s)] = 0.0
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  Routine correctsound
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    SoundComponent correctSound
      forceEndRoutine = False
      sound [set every repeat] = stimuli/correct.wav
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.0
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  Routine resultsscreen
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    TextboxComponent thanks
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Thank you for participating in this experiment.
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  Routine instructions0
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    TextboxComponent textbox
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = This is a visual search task. This task will ask you to find Waldo in a sea of candy canes.
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  Routine instructions1
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    TextboxComponent secondtrial
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        Great job!

        Now we will ask you to find Waldo when he’s wearing a different outfit…
  Routine trial2
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    ImageComponent target2
      image = stimuli/waldo1.png
      pos [set every repeat] = (random()-0.5, random()-0.5)
      size = (0.175, 0.125)
      startVal [time (s)] = 0.0
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    MouseComponent trial_mouse2
      clickable = target2
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable [set every repeat] = name,
      startVal [time (s)] = 0.0
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    CodeComponent code2
      Code Type = Auto->JS
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      Begin Routine:
        import random as rnd

        false_images = []

        trial_mouse.clickReset()
        trial_mouse.setPos((0, 0))

        mouseReleased = False

        for i in range(150):
            pos = (rnd.uniform(-0.5, 0.5), rnd.uniform(-0.5, 0.5))

            stim = visual.ImageStim(
                win=win,
                image='stimuli/candycane.png',
                pos=pos,
                size=(0.1, 0.1)
            )
            false_images.append(stim)
      Each Frame:
        for stim in false_images:
            stim.draw()
  Routine trial1
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    ImageComponent target1
      image = stimuli/waldo.png
      pos [set every repeat] = (random()-0.5, random()-0.5)
      size = (0.05, 0.125)
      startVal [time (s)] = 0.0
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    MouseComponent trial_mouse
      clickable = target1
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable [set every repeat] = name,
      startVal [time (s)] = 0.0
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    CodeComponent code1
      Code Type = Auto->JS
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      Begin Routine:
        import random as rnd

        false_images = []

        trial_mouse.clickReset()
        trial_mouse.setPos((0, 0))

        mouseReleased = False

        for i in range(150):
            pos = (rnd.uniform(-0.5, 0.5), rnd.uniform(-0.5, 0.5))

            stim = visual.ImageStim(
                win=win,
                image='stimuli/candycane.png',
                pos=pos,
                size=(0.1, 0.1)
            )
            false_images.append(stim)
      Each Frame:
        for stim in false_images:
            stim.draw()
  Routine instructions2
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    TextboxComponent pinkcandycaneinstructions
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        Fantastic!

        Now find the PINK candy cane hidden among the red candy canes.
  Routine trial3
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    ImageComponent target3
      image = stimuli/pinkcandycane.png
      pos [set every repeat] = (random()-0.5, random()-0.5)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    MouseComponent trial_mouse3
      clickable = target3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable [set every repeat] = name,
      startVal [time (s)] = 0.0
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    CodeComponent code3
      Code Type = Auto->JS
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      Begin Routine:
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      Each Frame:
        for stim in false_images:
            stim.draw()
  Routine clickthestar
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    TextboxComponent clickstar
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        Great! Now find Waldo.

        Click the star at every trial to begin.
  Routine waldodemo1
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    ImageComponent demo1
      image = stimuli/waldo.png
      pos = (0.05, -.10)
      size = (0.45, 0.85)
      startVal [time (s)] = 0.0
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    MouseComponent democlick1
      clickable = demo1
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable [set every repeat] = name,
      startVal [time (s)] = 0.0
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    TextboxComponent demoinstructions1
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0, 0.4)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      text = Try clicking Waldo.
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  Routine waldodemo2
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    ImageComponent demo2
      image = stimuli/waldo1.png
      pos = (0.04, -0.10)
      size = (1.45, 0.95)
      startVal [time (s)] = 0.0
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    MouseComponent democlick2
      clickable = demo2
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable [set every repeat] = name,
      startVal [time (s)] = 0.0
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    TextboxComponent textbox_2
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0, 0.4)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      text = Try clicking Waldo.
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  Routine pinkcandydemo
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    ImageComponent demo3
      image = stimuli/pinkcandycane.png
      pos = (0, -0.10)
      size = (0.6, 0.6)
      startVal [time (s)] = 0.0
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    MouseComponent democlick3
      clickable = demo3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable [set every repeat] = name,
      startVal [time (s)] = 0.0
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    TextboxComponent demoinstructions3
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0, 0.4)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      text = Try clicking the candy cane.
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Flow
  Routine instructions0
  Routine waldodemo1
  Routine correctsound
  Routine clickthestar
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 10
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    conditions:
      [OrderedDict([('image_type', 'stimuli/waldo.png')]),
      OrderedDict([('image_type', 'stimuli/candycane.png')]),
      OrderedDict([('image_type', 'stimuli/candycane.png')]),
      OrderedDict([('image_type', 'stimuli/candycane.png')]),
      OrderedDict([('image_type', 'stimuli/candycane.png')]),
      OrderedDict([('image_type', 'stimuli/candycane.png')]),
      OrderedDict([('image_type', 'stimuli/candycane.png')]),
      OrderedDict([('image_type', 'stimuli/candycane.png')]),
      OrderedDict([('image_type', 'stimuli/candycane.png')]),
      OrderedDict([('image_type', 'stimuli/candycane.png')]),
      OrderedDict([('image_type', 'stimuli/candycane.png')]),
      OrderedDict([('image_type', 'stimuli/candycane.png')]),
      OrderedDict([('image_type', 'stimuli/candycane.png')]),
      OrderedDict([('image_type', 'stimuli/candycane.png')]),
      OrderedDict([('image_type', 'stimuli/candycane.png')]),
      OrderedDict([('image_type', 'stimuli/candycane.png')]),
      OrderedDict([('image_type', 'stimuli/candycane.png')]),
      OrderedDict([('image_type', 'stimuli/candycane.png')]),
      OrderedDict([('image_type', 'stimuli/candycane.png')]),
      OrderedDict([('image_type', 'stimuli/candycane.png')]),
      OrderedDict([('image_type', 'stimuli/candycane.png')]),
      OrderedDict([('image_type', 'stimuli/candycane.png')]),
      OrderedDict([('image_type', 'stimuli/candycane.png')]),
      OrderedDict([('image_type', 'stimuli/candycane.png')]),
      OrderedDict([('image_type', 'stimuli/candycane.png')]),
      OrderedDict([('image_type', 'stimuli/candycane.png')]),
      OrderedDict([('image_type', 'stimuli/candycane.png')])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
    Routine start
    Routine trial1
    Routine correctsound
  LoopTerminator trials
  Routine instructions1
  Routine waldodemo2
  Routine correctsound
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = random
    nReps = 10
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    Routine start
    Routine trial2
    Routine correctsound
  LoopTerminator trials_2
  Routine instructions2
  Routine pinkcandydemo
  Routine correctsound
  LoopInitiator trials_3 loopType="TrialHandler"
    loopType = random
    nReps = 10
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    Routine start
    Routine trial3
    Routine correctsound
  LoopTerminator trials_3
  Routine resultsscreen
